##########################################################################################################################
# Frite -> Volume fictif pour recupérer des informations sur le passage des particules 
# Volumes placés avant et après un élément interessant ex: système tungstène
# WARNING : Frite Space associé à une géométrie !!!
##########################################################################################################################

###
### Light version | Track only source and collimateur
###

# 26/02/2020 : lIGNE Arronax
# Bride + Kapton 
# Disposition Tungsten : 1 Feuille de tungsten enchassé dans du PVC
# Détecteur Charbel
# Cuivre Rayons X
# Collimateur

#====================================================================
#====================================================================
# -----------------------------------------------------
# Bride + fenetre kapton
#================================================

# Kapton before -> attach to volume kapton


#COLLIMATEUR 1 collé à la cible
#=============================================================================================================

/gate/world/daughters/name frite_colli_before
/gate/world/daughters/insert box
/gate/frite_colli_before/setMaterial G4_AIR
/gate/frite_colli_before/geometry/setXLength 40 cm
/gate/frite_colli_before/geometry/setYLength 40 cm
/gate/frite_colli_before/geometry/setZLength 0.01 cm
/gate/frite_colli_before/placement/setTranslation 0. 0. 162.495 cm
/gate/frite_colli_before/vis/setColor magenta
/gate/frite_colli_before/vis/forceSolid

/gate/world/daughters/name frite_colli_after
/gate/world/daughters/insert box
/gate/frite_colli_after/setMaterial G4_AIR
/gate/frite_colli_after/geometry/setXLength 40 cm
/gate/frite_colli_after/geometry/setYLength 40 cm
/gate/frite_colli_after/geometry/setZLength 0.01 cm
/gate/frite_colli_after/placement/setTranslation 0. 0. 165.005 cm
/gate/frite_colli_after/vis/setColor magenta
/gate/frite_colli_after/vis/forceSolid




















